---
API: 2
OpenSesame: 3.0.2
Platform: nt
---
set width 1024
set uniform_coordinates "yes"
set title "New experiment"
set subject_parity "even"
set subject_nr 0
set start "experiment"
set sampler_backend "legacy"
set mouse_backend "legacy"
set keyboard_backend "legacy"
set height 768
set foreground "white"
set font_size 18
set font_italic "no"
set font_family "mono"
set font_bold "no"
set description "Default description"
set coordinates "uniform"
set compensation 0
set color_backend "legacy"
set clock_backend "legacy"
set canvas_backend "legacy"
set bidi "no"
set background "black"

define sketchpad earth
	set duration "keypress"
	set description "Displays stimuli"
	draw image center=1 file="earth_1024_512.jpg" scale=1 show_if=always x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run new_pygaze_init always
	run receive_trigger always
	run new_pygaze_start_recording always
	run game always
	run earth always
	run passage always
	run new_pygaze_stop_recording always

define sketchpad game
	set duration "keypress"
	set description "Displays stimuli"
	draw image center=1 file="Child of Light2015-9-21-22-30-31.jpg" scale=0.6 show_if=always x=0 y=0 z_index=0

define pygaze_init new_pygaze_init
	set tracker_type "Advanced dummy (mouse simulation)"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode "area"
	set eyelink_force_drift_correct "yes"
	set description "Initialize and calibrate eye tracker"
	set calibrate "yes"
	set calbeep "yes"
	set _logfile "automatic"

define pygaze_start_recording new_pygaze_start_recording
	set status_msg "start_trial"
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording new_pygaze_stop_recording
	set status_msg "stop_trial"
	set description "Stops recording of eye tracking data"

define sketchpad passage
	set duration "keypress"
	set description "Displays stimuli"
	draw image center=1 file="PIC-1.jpg" scale=1 show_if=always x=0 y=0 z_index=0

define inline_script receive_pos
	set description "Executes Python code"
	___run__
	from openexp.canvas import canvas
	
	#create a canvas and draw the fixation point
	
	
	
	while True:
		(data, addr) = UDPSock.recvfrom(buf)
		data = data.split()
		x = data[0]
		y = data[1]
		fixpoint = canvas(exp)
		fixpoint.text(x)
		fixpoint.show()
		if x == "-999" and y == "-999": break
	__end__
	set _prepare ""

define inline_script receive_trigger
	set description "Executes Python code"
	___run__
	#showing the waiting message
	my_canvas = canvas()
	my_canvas.text('<b>Waiting for the main computer...</b>')
	my_canvas.show()
	
	# Waiting for message from main computer
	import os
	from socket import *
	host = ""
	port = 13000
	buf = 1024
	addr = (host, port)
	UDPSock = socket(AF_INET, SOCK_DGRAM)
	UDPSock.bind(addr)
	
	
	while True:
		(data, addr) = UDPSock.recvfrom(buf)
		if data == "1": 
			break
	__end__
	set _prepare ""

